OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:32" => #1
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Index
Signal=#1 -> 0x341d3912 GDF file writer
  Filename = C:/Users/PC/Desktop/data/raw/record-[$core{date}-$core{time}].gdf
Data=#1 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Signal Resampling => #4
  New Sampling Frequency = 256
  Sample Count Per Buffer = 8
  Low Pass Filter Signal Before Downsampling = false
Data=#4 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#4 -> Temporal Filter => #6
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
-> Signal Buffer => #7
  Clock frequency (Hz) = 60
  Script = D:/Artigence/BCI/latency_3s.py
Data=#7 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Experiment information=#0.Experiment information, Signal=#6, Stimulation=#0.Stimulations -> 0x341d3912 GDF file writer
  Filename = C:/Users/PC/Desktop/data/prepro/record-[$core{date}-$core{time}].gdf
Data=#6 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Experiment information=#0.Experiment information, Signal=#6, Stimulations=#0.Stimulations -> 0x341d3912 EDF File Writer
  Filename = C:/Users/PC/Desktop/data/prepro/record-[$core{date}-$core{time}].edf
Data=#4 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
